CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI', 'PH3: An antibody for phosphorylated histone H3 correlated with mitosis', 'cellbody: ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (extension does istif)
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,160
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:6|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
    Select the input objects:Nuclei
    Name the output image:NucleiLabels
    Select the color format:uint16
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
SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:NucleiLabels
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_labels
    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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